PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'session':'01'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = emo_stroop
  logging level = warning
  Screen = 1
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Routines
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg=u"¡Correcto!"
        else:
          msg=u"¡Error!"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine set_trial_blocks
    CodeComponent code_component
      Begin Experiment:
        import random
        import pandas as pd
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Prepare practice blocks
        block_ranges_practice = list(block_ranges.choose_blocks_practice)
        print(block_ranges_practice)
        random.shuffle(block_ranges_practice)

        # Prepare experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
        print (2, block_ranges_exp)
  Routine set_block
    CodeComponent code
      Begin Experiment:
        import random
        import pandas as pd
        block_ranges = pd.read_csv('choose_blocks.csv')

        # Prepare practice blocks
        block_ranges_practice = list(block_ranges.choose_blocks_practice)
        print(block_ranges_practice)
        random.shuffle(block_ranges_practice)


        # Prepare experiment blocks
        block_ranges_exp = list(block_ranges.choose_blocks_exp)
        random.shuffle(block_ranges_exp)
        print (2, block_ranges_exp)
  Routine trial
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 1.5
      letterHeight = 0.15
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f', 'j', 'k'
      startVal [time (s)] = 1.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.07
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      text:
        ¿Listo para comenzar el experimento real?

        Recuerda, ignora la palabra en sí misma.

        Presiona:
        Izquierda para letras rojas
        Abajo para letras verdes
        Derecha para letras azules

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        ¡Completaste el experimento!

        ¡Muchas gracias!
  Routine feedback_4
  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Recuerda, ignora la palabra.

        Presiona:
        Izquierda para letras rojas
        Abajo para letras verdes
        Derecha para letras azules

        Vamos a comenzar con unos ejercicios de práctica

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine set_trial_blocks
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice_trials.csv
    loopType = random
    nReps = 4
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trial_blocks_exp loopType="TrialHandler"
    loopType = random
    nReps = len(block_ranges_exp)
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = exp_trials.csv
      loopType = random
      nReps = 1
      endPoints = [1, 2]
      Selected rows = $block_ranges_exp.pop()
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      conditions:
        [{'text': u'positiva1', 'condition': u'positive', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'negativa1', 'condition': u'negative', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'neutral1', 'condition': u'neutral', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'positiva2', 'condition': u'positive', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'negativa2', 'condition': u'negative', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'neutral2', 'condition': u'neutral', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'positiva3', 'condition': u'positive', 'corrAns': u'left', 'letterColor': u'red'},
        {'text': u'negativa3', 'condition': u'negative', 'corrAns': u'left', 'letterColor': u'red'},
        {'text': u'neutral3', 'condition': u'neutral', 'corrAns': u'left', 'letterColor': u'red'},
        {'text': u'positiva4', 'condition': u'positive', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'negativa4', 'condition': u'negative', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'neutral4', 'condition': u'neutral', 'corrAns': u'right', 'letterColor': u'blue'},
        {'text': u'positiva5', 'condition': u'positive', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'negativa5', 'condition': u'negative', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'neutral5', 'condition': u'neutral', 'corrAns': u'down', 'letterColor': u'green'},
        {'text': u'positiva6', 'condition': u'positive', 'corrAns': u'left', 'letterColor': u'red'}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
      Routine trial
    LoopTerminator trials
  LoopTerminator trial_blocks_exp
  Routine thanks
